PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = test_exp
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = /Users/samhutchinson/Desktop/Photos/4-20-20/IMG_0684.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine resp
    KeyboardComponent key_resp
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [condition] = $event.getKeys(keyList=['1','2','3'])
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = $key_resp.status == FINISHED
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      text:
        Which kind of figure predominated?

        ‘1’ - Numbers
        ‘2’ - Letters
        ‘3’ - Shapes
  Routine exit
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = $event.getKeys(keyList=['space'])
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      text:
        Thank you for participating in this experiment!

        Press the space bar to exit.
  Routine fix
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.075, 0.075)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine inst1
    TextComponent text
      letterHeight = 0.045
      startVal [time (s)] = 0.0
      stopVal [condition] = $event.getKeys(keyList = 'space')
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      text:
        You will first see a 3x4 grid containing either numbers, letters, or shapes in each box.

        You will then be asked to name which kind of figure (number, letter, or shape) occupied most of the boxes in the grid that you saw.

        Then, when prompted, please respond by pressing one of the following keys:

        ‘1’ - Numbers predominated
        ‘2’ - Letters predominated
        ‘3’ - Shapes predominated

        Before the first trial, as well as before each response, please focus your attention on the fixation cross in the center of the screen.

        We’ll start with three practice rounds. When you are ready to start, press the space bar.
  Routine prac_trial
    ImageComponent image_2
      image [set every repeat] = /Users/samhutchinson/Desktop/Photos/Colorado June 2021/IMG_2074.JPG
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine prac_resp
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = $event.getKeys(keyList=['1','2','3'])
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      text:
        Which kind of figure predominated?

        ‘1’ - Numbers
        ‘2’ - Letters
        ‘3’ - Shapes
  Routine inst2
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [condition] = $event.getKeys(keyList=['space'])
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      text:
        Now that you have some practice with the task, we will move in to the full experiment, consisting of X trials.

        Press the space bar when you are ready to continue.
Flow
  Routine inst1
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine fix
    Routine prac_trial
    Routine fix
    Routine prac_resp
  LoopTerminator trials_2
  Routine inst2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine fix
    Routine trial
    Routine fix
    Routine resp
  LoopTerminator trials
  Routine exit
